PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = seq_teaching_exp
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Routines
  Routine Briefing
    TextComponent gen_info
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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      text:
        Some initial general information:

        Participation consent TBC.

        Demographic information collection TBC.
    ButtonComponent brf_btn
      bold = True
      borderColor = black
      color = black
      disabled = True
      fillColor = white
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.45)
      size = [0.2,0.1]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = Next
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    CodeComponent btn_conf
      Code Type = Py
      disabled = True
      Before Experiment:
        import time
        LOCK_ON=True
        LOCK_OFF=False
        btn_locks={}
  Routine Raven_Matrices
    TextComponent rv_txt1
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 600.0
      text = Pre-training phase
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    ButtonComponent rv_btn1
      bold = True
      color = black
      disabled = True
      fillColor = white
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.45)
      size = [0.2,0.1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 600.0
      text = Next
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  Routine Debriefing
    TextComponent debrf_info
      disabled = True
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = Thank you for participating in this experiment.
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    ButtonComponent debrf_btn
      bold = True
      color = black
      disabled = True
      fillColor = white
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.0,-0.45)
      size = [0.3,0.1]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = Finish
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  Routine Training_1
    TextComponent train1_num
      letterHeight = 0.02
      pos = (0.0, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = Training example 1 (this could be removed)
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    TextComponent train1_txt1
      letterHeight = 0.03
      pos = (0.4, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
      text = Revised instructions for user operation.
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    ButtonComponent train1_btn5
      bold = True
      color = black
      fillColor = white
      forceEndRoutine = True
      letterHeight = 0.05
      opacity = 0
      pos = (-0.4, -0.45)
      size = [0.2,0.1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Next
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      callback:
        continueRoutine = True
        if 'train1_btn5' in btn_locks and btn_locks['train1_btn5']:
                            btn_locks['train1_btn5'] = LOCK_OFF
                            time.sleep(0.1)
                            continueRoutine = False
    ImageComponent train1_ex5
      image = materials/merge_sort/demo_imgs/banana_1.png
      opacity = 0
      pos = (-0.4, 0.0)
      size = [0.7,0.7]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ButtonComponent train1_btn4
      bold = True
      color = black
      fillColor = white
      forceEndRoutine = False
      letterHeight = 0.05
      opacity = 0
      pos = (-0.4, -0.45)
      size = [0.2,0.1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Next
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      callback:
        if 'train1_btn4' in btn_locks and btn_locks['train1_btn4']:
                            train1_ex4.setOpacity(0.0)
                            train1_btn4.setOpacity(0.0)
                            train1_ex5.setOpacity(1.0)
                            time.sleep(0.1)
                            train1_btn5.setOpacity(1.0)

                            btn_locks['train1_btn5'] = LOCK_ON
                            btn_locks['train1_btn4'] = LOCK_OFF
                            train1_num.setText('Training example 5 (this could be removed)')
    ImageComponent train1_ex4
      image = materials/merge_sort/demo_imgs/banana_1.png
      opacity = 0
      pos = (-0.4, 0.0)
      size = [0.7,0.7]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ButtonComponent train1_btn3
      bold = True
      color = black
      fillColor = white
      forceEndRoutine = False
      letterHeight = 0.05
      opacity = 0
      pos = (-0.4, -0.45)
      size = [0.2,0.1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Next
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      callback:
        if 'train1_btn3' in btn_locks and btn_locks['train1_btn3']:
                            train1_ex3.setOpacity(0.0)
                            train1_btn3.setOpacity(0.0)
                            train1_ex4.setOpacity(1.0)
                            time.sleep(0.1)
                            train1_btn4.setOpacity(1.0)

                            btn_locks['train1_btn4'] = LOCK_ON
                            btn_locks['train1_btn3'] = LOCK_OFF
                            train1_num.setText('Training example 4 (this could be removed)')
    ImageComponent train1_ex3
      image = materials/merge_sort/demo_imgs/banana_1.png
      opacity = 0
      pos = (-0.4, 0.0)
      size = [0.7,0.7]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ButtonComponent train1_btn2
      bold = True
      color = black
      fillColor = white
      forceEndRoutine = False
      letterHeight = 0.05
      opacity = 0
      pos = (-0.4, -0.45)
      size = [0.2,0.1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Next
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      callback:
        if 'train1_btn2' in btn_locks and btn_locks['train1_btn2']:
                            train1_ex2.setOpacity(0.0)
                            train1_btn2.setOpacity(0.0)
                            train1_ex3.setOpacity(1.0)
                            time.sleep(0.1)
                            train1_btn3.setOpacity(1.0)

                            btn_locks['train1_btn3'] = LOCK_ON
                            btn_locks['train1_btn2'] = LOCK_OFF
                            train1_num.setText('Training example 3 (this could be removed)')
    ImageComponent train1_ex2
      image = materials/merge_sort/demo_imgs/banana_1.png
      opacity = 0
      pos = (-0.4, 0.0)
      size = [0.7,0.7]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ButtonComponent train1_btn1
      bold = True
      color = black
      fillColor = white
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (-0.4, -0.45)
      size = [0.2,0.1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Next
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      callback:
        if 'train1_btn1' not in btn_locks:
                            train1_ex1.setOpacity(0.0)
                            train1_btn1.setOpacity(0.0)
                            train1_ex2.setOpacity(1.0)
                            time.sleep(0.1)
                            train1_btn2.setOpacity(1.0)

                            btn_locks['train1_btn2'] = LOCK_ON
                            btn_locks['train1_btn1'] = LOCK_OFF
                            train1_num.setText('Training example 2 (this could be removed)')
    ImageComponent train1_ex1
      image = materials/merge_sort/demo_imgs/banana_1.png
      pos = (-0.4, 0.0)
      size = [0.7,0.7]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent train1_bg1
      color = $[255,255,255]
      image = materials/merge_sort/demo_imgs/white_BG.png
      pos = (0.4, 0.3)
      size = (0.7, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent train1_bg2
      image = materials/merge_sort/demo_imgs/white_BG.png
      pos = (0.4, -0.2)
      size = (0.7, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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  Routine Instructions_1
    TextComponent instr1_txt1
      disabled = True
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
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      text:
        Some instructions for the performance questions
    ButtonComponent instr1_btn3
      bold = True
      color = black
      disabled = True
      fillColor = white
      forceEndRoutine = True
      letterHeight = 0.05
      opacity = 0
      pos = (0, -0.45)
      size = [0.2,0.1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Next
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      callback:
        continueRoutine = True
        if 'instr1_btn3' in btn_locks and btn_locks['instr1_btn3']:
                            btn_locks['instr1_btn3'] = LOCK_OFF
                            time.sleep(0.1)
                            continueRoutine = False
    ImageComponent instr1_ex3
      disabled = True
      image = materials/demo_imgs/[SINGLE - SIMPLE] example 16.png
      opacity = 0
      size = [1,0.5]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ButtonComponent instr1_btn2
      bold = True
      color = black
      disabled = True
      fillColor = white
      forceEndRoutine = False
      letterHeight = 0.05
      opacity = 0
      pos = (0, -0.45)
      size = [0.2,0.1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Next
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      callback:
        if 'instr1_btn2' in btn_locks and btn_locks['instr1_btn2']:
                            instr1_ex2.setOpacity(0.0)
                            instr1_btn2.setOpacity(0.0)
                            instr1_ex3.setOpacity(1.0)
                            time.sleep(0.1)
                            instr1_btn3.setOpacity(1.0)

                            btn_locks['instr1_btn3'] = LOCK_ON
                            btn_locks['instr1_btn2'] = LOCK_OFF
    ImageComponent instr1_ex2
      disabled = True
      image = materials/demo_imgs/[SINGLE - SIMPLE] example 09.png
      opacity = 0
      size = [1,0.5]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ButtonComponent instr1_btn1
      bold = True
      color = black
      disabled = True
      fillColor = white
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (0, -0.45)
      size = [0.2,0.1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Next
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      callback:
        if 'instr1_btn1' not in btn_locks:
                            instr1_ex1.setOpacity(0.0)
                            instr1_btn1.setOpacity(0.0)
                            instr1_ex2.setOpacity(1.0)
                            time.sleep(0.1)
                            instr1_btn2.setOpacity(1.0)

                            btn_locks['instr1_btn2'] = LOCK_ON
                            btn_locks['instr1_btn1'] = LOCK_OFF
    ImageComponent instr1_ex1
      disabled = True
      image = materials/demo_imgs/[SINGLE - SIMPLE] example 07.png
      size = [1,0.5]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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  Routine Training_2
    TextComponent train2_num
      disabled = True
      letterHeight = 0.02
      pos = (-0.4, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = Training example 1
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    TextComponent train2_txt1
      disabled = True
      letterHeight = 0.03
      pos = (0.4, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
      text = Revised instructions for user operation.
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    ButtonComponent train2_btn5
      bold = True
      color = black
      disabled = True
      fillColor = white
      forceEndRoutine = True
      letterHeight = 0.05
      opacity = 0
      pos = (-0.4, -0.45)
      size = [0.2,0.1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Next
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      callback:
        continueRoutine = True
        if 'train2_btn5' in btn_locks and btn_locks['train2_btn5']:
                            btn_locks['train2_btn5'] = LOCK_OFF
                            time.sleep(0.1)
                            continueRoutine = False
    ImageComponent train2_ex5
      disabled = True
      image = materials/demo_imgs/[MULTI - SIMPLE] example 19.png
      opacity = 0
      pos = (-0.4, 0.0)
      size = [0.7,0.7]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ButtonComponent train2_btn4
      bold = True
      color = black
      disabled = True
      fillColor = white
      forceEndRoutine = False
      letterHeight = 0.05
      opacity = 0
      pos = (-0.4, -0.45)
      size = [0.2,0.1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Next
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      callback:
        if 'train2_btn4' in btn_locks and btn_locks['train2_btn4']:
                            train2_ex4.setOpacity(0.0)
                            train2_btn4.setOpacity(0.0)
                            train2_ex5.setOpacity(1.0)
                            time.sleep(0.1)
                            train2_btn5.setOpacity(1.0)

                            btn_locks['train2_btn5'] = LOCK_ON
                            btn_locks['train2_btn4'] = LOCK_OFF
                            train2_num.setText('Training example 5')
    ImageComponent train2_ex4
      disabled = True
      image = materials/demo_imgs/[MULTI - SIMPLE] example 17.png
      opacity = 0
      pos = (-0.4, 0.0)
      size = [0.7,0.7]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ButtonComponent train2_btn3
      bold = True
      color = black
      disabled = True
      fillColor = white
      forceEndRoutine = False
      letterHeight = 0.05
      opacity = 0
      pos = (-0.4, -0.45)
      size = [0.2,0.1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Next
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      callback:
        if 'train2_btn3' in btn_locks and btn_locks['train2_btn3']:
                            train2_ex3.setOpacity(0.0)
                            train2_btn3.setOpacity(0.0)
                            train2_ex4.setOpacity(1.0)
                            time.sleep(0.1)
                            train2_btn4.setOpacity(1.0)

                            btn_locks['train2_btn4'] = LOCK_ON
                            btn_locks['train2_btn3'] = LOCK_OFF
                            train2_num.setText('Training example 4')
    ImageComponent train2_ex3
      disabled = True
      image = materials/demo_imgs/[MULTI - SIMPLE] example 05.png
      opacity = 0
      pos = (-0.4, 0.0)
      size = [0.7,0.7]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ButtonComponent train2_btn2
      bold = True
      color = black
      disabled = True
      fillColor = white
      forceEndRoutine = False
      letterHeight = 0.05
      opacity = 0
      pos = (-0.4, -0.45)
      size = [0.2,0.1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Next
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      callback:
        if 'train2_btn2' in btn_locks and btn_locks['train2_btn2']:
                            train2_ex2.setOpacity(0.0)
                            train2_btn2.setOpacity(0.0)
                            train2_ex3.setOpacity(1.0)
                            time.sleep(0.1)
                            train2_btn3.setOpacity(1.0)

                            btn_locks['train2_btn3'] = LOCK_ON
                            btn_locks['train2_btn2'] = LOCK_OFF
                            train2_num.setText('Training example 3')
    ImageComponent train2_ex2
      disabled = True
      image = materials/demo_imgs/[MULTI - SIMPLE] example 04.png
      opacity = 0
      pos = (-0.4, 0.0)
      size = [0.7,0.7]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ButtonComponent train2_btn1
      bold = True
      color = black
      disabled = True
      fillColor = white
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (-0.4, -0.45)
      size = [0.2,0.1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Next
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      callback:
        if 'train2_btn1' not in btn_locks:
                            train2_ex1.setOpacity(0.0)
                            train2_btn1.setOpacity(0.0)
                            train2_ex2.setOpacity(1.0)
                            time.sleep(0.1)
                            train2_btn2.setOpacity(1.0)

                            btn_locks['train2_btn2'] = LOCK_ON
                            btn_locks['train2_btn1'] = LOCK_OFF
                            train2_num.setText('Training example 2')
    ImageComponent train2_ex1
      disabled = True
      image = materials/demo_imgs/[MULTI - SIMPLE] example 02.png
      pos = (-0.4, 0.0)
      size = [0.7,0.7]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent train2_bg1
      color = $[255,255,255]
      disabled = True
      image = materials/demo_imgs/white_BG.png
      pos = (0.4, 0.3)
      size = (0.7, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent train2_bg2
      disabled = True
      image = materials/demo_imgs/white_BG.png
      pos = (0.4, -0.2)
      size = (0.7, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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  Routine Performance_1
    TextComponent perf1_num
      disabled = True
      letterHeight = 0.02
      pos = (-0.4, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = Test example 1 (this could be removed)
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    TextComponent perf1_txt1
      disabled = True
      letterHeight = 0.03
      pos = (0.4, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
      text = Revised instructions for user operation.
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    ButtonComponent perf1_btn5
      bold = True
      color = black
      disabled = True
      fillColor = white
      forceEndRoutine = True
      letterHeight = 0.05
      opacity = 0
      pos = (-0.4, -0.45)
      size = [0.2,0.1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Next
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      callback:
        continueRoutine = True
        if 'perf1_btn5' in btn_locks and btn_locks['perf1_btn5']:
                            btn_locks['perf1_btn5'] = LOCK_OFF
                            time.sleep(0.1)
                            continueRoutine = False
    ImageComponent perf1_ex5
      disabled = True
      image = materials/demo_imgs/[SINGLE - SIMPLE] example 20.png
      opacity = 0
      pos = (-0.4, 0.0)
      size = [0.7,0.7]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ButtonComponent perf1_btn4
      bold = True
      color = black
      disabled = True
      fillColor = white
      forceEndRoutine = False
      letterHeight = 0.05
      opacity = 0
      pos = (-0.4, -0.45)
      size = [0.2,0.1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Next
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      callback:
        if 'perf1_btn4' in btn_locks and btn_locks['perf1_btn4']:
                            perf1_ex4.setOpacity(0.0)
                            perf1_btn4.setOpacity(0.0)
                            perf1_ex5.setOpacity(1.0)
                            time.sleep(0.1)
                            perf1_btn5.setOpacity(1.0)

                            btn_locks['perf1_btn5'] = LOCK_ON
                            btn_locks['perf1_btn4'] = LOCK_OFF
                            perf1_num.setText('Test example 5 (this could be removed)')
    ImageComponent perf1_ex4
      disabled = True
      image = materials/demo_imgs/[SINGLE - SIMPLE] example 17.png
      opacity = 0
      pos = (-0.4, 0.0)
      size = [0.7,0.7]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ButtonComponent perf1_btn3
      bold = True
      color = black
      disabled = True
      fillColor = white
      forceEndRoutine = False
      letterHeight = 0.05
      opacity = 0
      pos = (-0.4, -0.45)
      size = [0.2,0.1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Next
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      callback:
        if 'perf1_btn3' in btn_locks and btn_locks['perf1_btn3']:
                            perf1_ex3.setOpacity(0.0)
                            perf1_btn3.setOpacity(0.0)
                            perf1_ex4.setOpacity(1.0)
                            time.sleep(0.1)
                            perf1_btn4.setOpacity(1.0)

                            btn_locks['perf1_btn4'] = LOCK_ON
                            btn_locks['perf1_btn3'] = LOCK_OFF
                            perf1_num.setText('Test example 4 (this could be removed)')
    ImageComponent perf1_ex3
      disabled = True
      image = materials/demo_imgs/[SINGLE - SIMPLE] example 16.png
      opacity = 0
      pos = (-0.4,0.0)
      size = [0.7,0.7]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ButtonComponent perf1_btn2
      bold = True
      color = black
      disabled = True
      fillColor = white
      forceEndRoutine = False
      letterHeight = 0.05
      opacity = 0
      pos = (-0.4, -0.45)
      size = [0.2,0.1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Next
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      callback:
        if 'perf1_btn2' in btn_locks and btn_locks['perf1_btn2']:
                            perf1_ex2.setOpacity(0.0)
                            perf1_btn2.setOpacity(0.0)
                            perf1_ex3.setOpacity(1.0)
                            time.sleep(0.1)
                            perf1_btn3.setOpacity(1.0)

                            btn_locks['perf1_btn3'] = LOCK_ON
                            btn_locks['perf1_btn2'] = LOCK_OFF
                            perf1_num.setText('Test example 3 (this could be removed)')
    ImageComponent perf1_ex2
      disabled = True
      image = materials/demo_imgs/[SINGLE - SIMPLE] example 09.png
      opacity = 0
      pos = (-0.4, 0.0)
      size = [0.7,0.7]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ButtonComponent perf1_btn1
      bold = True
      color = black
      disabled = True
      fillColor = white
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (-0.4, -0.45)
      size = [0.2,0.1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Next
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      callback:
        if 'perf1_btn1' not in btn_locks:
                            perf1_ex1.setOpacity(0.0)
                            perf1_btn1.setOpacity(0.0)
                            perf1_ex2.setOpacity(1.0)
                            time.sleep(0.1)
                            perf1_btn2.setOpacity(1.0)

                            btn_locks['perf1_btn2'] = LOCK_ON
                            btn_locks['perf1_btn1'] = LOCK_OFF
                            perf1_num.setText('Test example 2 (this could be removed)')
    ImageComponent perf1_ex1
      disabled = True
      image = materials/demo_imgs/[SINGLE - SIMPLE] example 07.png
      pos = (-0.4, 0.0)
      size = [0.7,0.7]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent perf1_bg1
      color = $[255,255,255]
      disabled = True
      image = materials/demo_imgs/white_BG.png
      pos = (0.4, 0.3)
      size = (0.7, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent perf1_bg2
      disabled = True
      image = materials/demo_imgs/white_BG.png
      pos = (0.4, -0.2)
      size = (0.7, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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  Routine Instructions_2
    TextComponent instr2_txt1
      disabled = True
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
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      text:
        Some instructions for the performance questions
    ButtonComponent instr2_btn3
      bold = True
      color = black
      disabled = True
      fillColor = white
      forceEndRoutine = True
      letterHeight = 0.05
      opacity = 0
      pos = (0, -0.45)
      size = [0.2,0.1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Next
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      callback:
        continueRoutine = True
        if 'instr2_btn3' in btn_locks and btn_locks['instr2_btn3']:
                            btn_locks['instr2_btn3'] = LOCK_OFF
                            time.sleep(0.1)
                            continueRoutine = False
    ImageComponent instr2_ex3
      disabled = True
      image = materials/demo_imgs/[SINGLE - SIMPLE] example 16.png
      opacity = 0
      size = [1,0.5]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ButtonComponent instr2_btn2
      bold = True
      color = black
      disabled = True
      fillColor = white
      forceEndRoutine = False
      letterHeight = 0.05
      opacity = 0
      pos = (0, -0.45)
      size = [0.2,0.1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Next
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      callback:
        if 'instr2_btn2' in btn_locks and btn_locks['instr2_btn2']:
                            instr2_ex2.setOpacity(0.0)
                            instr2_btn2.setOpacity(0.0)
                            instr2_ex3.setOpacity(1.0)
                            time.sleep(0.1)
                            instr2_btn3.setOpacity(1.0)

                            btn_locks['instr2_btn3'] = LOCK_ON
                            btn_locks['instr2_btn2'] = LOCK_OFF
    ImageComponent instr2_ex2
      disabled = True
      image = materials/demo_imgs/[SINGLE - SIMPLE] example 09.png
      opacity = 0
      size = [1,0.5]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ButtonComponent instr2_btn1
      bold = True
      color = black
      disabled = True
      fillColor = white
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (0, -0.45)
      size = [0.2,0.1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Next
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      callback:
        if 'instr2_btn1' not in btn_locks:
                            instr2_ex1.setOpacity(0.0)
                            instr2_btn1.setOpacity(0.0)
                            instr2_ex2.setOpacity(1.0)
                            time.sleep(0.1)
                            instr2_btn2.setOpacity(1.0)

                            btn_locks['instr2_btn2'] = LOCK_ON
                            btn_locks['instr2_btn1'] = LOCK_OFF
    ImageComponent instr2_ex1
      disabled = True
      image = materials/demo_imgs/[SINGLE - SIMPLE] example 07.png
      size = [1,0.5]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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  Routine Performance_2
    TextComponent perf2_num
      disabled = True
      letterHeight = 0.02
      pos = (-0.4, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = Test example 1 (this could be removed)
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    TextComponent perf2_txt1
      disabled = True
      letterHeight = 0.03
      pos = (0.4, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
      text = Revised instructions for user operation.
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    ButtonComponent perf2_btn5
      bold = True
      color = black
      disabled = True
      fillColor = white
      forceEndRoutine = True
      letterHeight = 0.05
      opacity = 0
      pos = (-0.4, -0.45)
      size = [0.2,0.1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Next
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      callback:
        continueRoutine = True
        if 'perf2_btn5' in btn_locks and btn_locks['perf2_btn5']:
                            btn_locks['perf2_btn5'] = LOCK_OFF
                            time.sleep(0.1)
                            continueRoutine = False
    ImageComponent perf2_ex5
      disabled = True
      image = materials/demo_imgs/[MULTI - SIMPLE] example 19.png
      opacity = 0
      pos = (-0.4, 0.0)
      size = [0.7,0.7]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ButtonComponent perf2_btn4
      bold = True
      color = black
      disabled = True
      fillColor = white
      forceEndRoutine = False
      letterHeight = 0.05
      opacity = 0
      pos = (-0.4, -0.45)
      size = [0.2,0.1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Next
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      callback:
        if 'perf2_btn4' in btn_locks and btn_locks['perf2_btn4']:
                            perf2_ex4.setOpacity(0.0)
                            perf2_btn4.setOpacity(0.0)
                            perf2_ex5.setOpacity(1.0)
                            time.sleep(0.1)
                            perf2_btn5.setOpacity(1.0)

                            btn_locks['perf2_btn5'] = LOCK_ON
                            btn_locks['perf2_btn4'] = LOCK_OFF
                            perf2_num.setText('Test example 5 (this could be removed)')
    ImageComponent perf2_ex4
      disabled = True
      image = materials/demo_imgs/[MULTI - SIMPLE] example 17.png
      opacity = 0
      pos = (-0.4, 0.0)
      size = [0.7,0.7]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ButtonComponent perf2_btn3
      bold = True
      color = black
      disabled = True
      fillColor = white
      forceEndRoutine = False
      letterHeight = 0.05
      opacity = 0
      pos = (-0.4, -0.45)
      size = [0.2,0.1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Next
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      callback:
        if 'perf2_btn3' in btn_locks and btn_locks['perf2_btn3']:
                            perf2_ex3.setOpacity(0.0)
                            perf2_btn3.setOpacity(0.0)
                            perf2_ex4.setOpacity(1.0)
                            time.sleep(0.1)
                            perf2_btn4.setOpacity(1.0)

                            btn_locks['perf2_btn4'] = LOCK_ON
                            btn_locks['perf2_btn3'] = LOCK_OFF
                            perf2_num.setText('Test example 4 (this could be removed)')
    ImageComponent perf2_ex3
      disabled = True
      image = materials/demo_imgs/[MULTI - SIMPLE] example 05.png
      opacity = 0
      pos = (-0.4,0.0)
      size = [0.7,0.7]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ButtonComponent perf2_btn2
      bold = True
      color = black
      disabled = True
      fillColor = white
      forceEndRoutine = False
      letterHeight = 0.05
      opacity = 0
      pos = (-0.4, -0.45)
      size = [0.2,0.1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Next
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      callback:
        if 'perf2_btn2' in btn_locks and btn_locks['perf2_btn2']:
                            perf2_ex2.setOpacity(0.0)
                            perf2_btn2.setOpacity(0.0)
                            perf2_ex3.setOpacity(1.0)
                            time.sleep(0.1)
                            perf2_btn3.setOpacity(1.0)

                            btn_locks['perf2_btn3'] = LOCK_ON
                            btn_locks['perf2_btn2'] = LOCK_OFF
                            perf2_num.setText('Test example 3 (this could be removed)')
    ImageComponent perf2_ex2
      disabled = True
      image = materials/demo_imgs/[MULTI - SIMPLE] example 04.png
      opacity = 0
      pos = (-0.4, 0.0)
      size = [0.7,0.7]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ButtonComponent perf2_btn1
      bold = True
      color = black
      disabled = True
      fillColor = white
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (-0.4, -0.45)
      size = [0.2,0.1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Next
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      callback:
        if 'perf2_btn1' not in btn_locks:
                            perf2_ex1.setOpacity(0.0)
                            perf2_btn1.setOpacity(0.0)
                            perf2_ex2.setOpacity(1.0)
                            time.sleep(0.1)
                            perf2_btn2.setOpacity(1.0)

                            btn_locks['perf2_btn2'] = LOCK_ON
                            btn_locks['perf2_btn1'] = LOCK_OFF
                            perf2_num.setText('Test example 2 (this could be removed)')
    ImageComponent perf2_ex1
      disabled = True
      image = materials/demo_imgs/[MULTI - SIMPLE] example 02.png
      pos = (-0.4, 0.0)
      size = [0.7,0.7]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent perf2_bg1
      color = $[255,255,255]
      disabled = True
      image = materials/demo_imgs/white_BG.png
      pos = (0.4, 0.3)
      size = (0.7, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent perf2_bg2
      disabled = True
      image = materials/demo_imgs/white_BG.png
      pos = (0.4, -0.2)
      size = (0.7, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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  Routine Performance_3
    TextComponent perf3_num
      disabled = True
      letterHeight = 0.02
      pos = (-0.4, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = Test example 1 (this could be removed)
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    TextComponent perf3_txt1
      disabled = True
      letterHeight = 0.03
      pos = (0.4, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
      text = Revised instructions for user operation.
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    ButtonComponent perf3_btn5
      bold = True
      color = black
      disabled = True
      fillColor = white
      forceEndRoutine = True
      letterHeight = 0.05
      opacity = 0
      pos = (-0.4, -0.45)
      size = [0.2,0.1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Next
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      callback:
        continueRoutine = True
        if 'perf3_btn5' in btn_locks and btn_locks['perf3_btn5']:
                            btn_locks['perf3_btn5'] = LOCK_OFF
                            time.sleep(0.1)
                            continueRoutine = False
    ImageComponent perf3_ex5
      disabled = True
      image = materials/demo_imgs/[SINGLE - SIMPLE] example 20.png
      opacity = 0
      pos = (-0.4, 0.0)
      size = [0.7,0.7]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ButtonComponent perf3_btn4
      bold = True
      color = black
      disabled = True
      fillColor = white
      forceEndRoutine = False
      letterHeight = 0.05
      opacity = 0
      pos = (-0.4, -0.45)
      size = [0.2,0.1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Next
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      callback:
        if 'perf3_btn4' in btn_locks and btn_locks['perf3_btn4']:
                            perf3_ex4.setOpacity(0.0)
                            perf3_btn4.setOpacity(0.0)
                            perf3_ex5.setOpacity(1.0)
                            time.sleep(0.1)
                            perf3_btn5.setOpacity(1.0)

                            btn_locks['perf3_btn5'] = LOCK_ON
                            btn_locks['perf3_btn4'] = LOCK_OFF
                            perf3_num.setText('Test example 5 (this could be removed)')
    ImageComponent perf3_ex4
      disabled = True
      image = materials/demo_imgs/[SINGLE - SIMPLE] example 17.png
      opacity = 0
      pos = (-0.4, 0.0)
      size = [0.7,0.7]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ButtonComponent perf3_btn3
      bold = True
      color = black
      disabled = True
      fillColor = white
      forceEndRoutine = False
      letterHeight = 0.05
      opacity = 0
      pos = (-0.4, -0.45)
      size = [0.2,0.1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Next
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      callback:
        if 'perf3_btn3' in btn_locks and btn_locks['perf3_btn3']:
                            perf3_ex3.setOpacity(0.0)
                            perf3_btn3.setOpacity(0.0)
                            perf3_ex4.setOpacity(1.0)
                            time.sleep(0.1)
                            perf3_btn4.setOpacity(1.0)

                            btn_locks['perf3_btn4'] = LOCK_ON
                            btn_locks['perf3_btn3'] = LOCK_OFF
                            perf3_num.setText('Test example 4 (this could be removed)')
    ImageComponent perf3_ex3
      disabled = True
      image = materials/demo_imgs/[SINGLE - SIMPLE] example 16.png
      opacity = 0
      pos = (-0.4,0.0)
      size = [0.7,0.7]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ButtonComponent perf3_btn2
      bold = True
      color = black
      disabled = True
      fillColor = white
      forceEndRoutine = False
      letterHeight = 0.05
      opacity = 0
      pos = (-0.4, -0.45)
      size = [0.2,0.1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Next
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      callback:
        if 'perf3_btn2' in btn_locks and btn_locks['perf3_btn2']:
                            perf3_ex2.setOpacity(0.0)
                            perf3_btn2.setOpacity(0.0)
                            perf3_ex3.setOpacity(1.0)
                            time.sleep(0.1)
                            perf3_btn3.setOpacity(1.0)

                            btn_locks['perf3_btn3'] = LOCK_ON
                            btn_locks['perf3_btn2'] = LOCK_OFF
                            perf3_num.setText('Test example 3 (this could be removed)')
    ImageComponent perf3_ex2
      disabled = True
      image = materials/demo_imgs/[SINGLE - SIMPLE] example 09.png
      opacity = 0
      pos = (-0.4, 0.0)
      size = [0.7,0.7]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ButtonComponent perf3_btn1
      bold = True
      color = black
      disabled = True
      fillColor = white
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (-0.4, -0.45)
      size = [0.2,0.1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Next
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      callback:
        if 'perf3_btn1' not in btn_locks:
                            perf3_ex1.setOpacity(0.0)
                            perf3_btn1.setOpacity(0.0)
                            perf3_ex2.setOpacity(1.0)
                            time.sleep(0.1)
                            perf3_btn2.setOpacity(1.0)

                            btn_locks['perf3_btn2'] = LOCK_ON
                            btn_locks['perf3_btn1'] = LOCK_OFF
                            perf3_num.setText('Test example 2 (this could be removed)')
    ImageComponent perf3_ex1
      disabled = True
      image = materials/demo_imgs/[SINGLE - SIMPLE] example 07.png
      pos = (-0.4, 0.0)
      size = [0.7,0.7]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent perf3_bg1
      color = $[255,255,255]
      disabled = True
      image = materials/demo_imgs/white_BG.png
      pos = (0.4, 0.3)
      size = (0.7, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent perf3_bg2
      disabled = True
      image = materials/demo_imgs/white_BG.png
      pos = (0.4, -0.2)
      size = (0.7, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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  Routine Intro
    TextComponent intro_text
      disabled = True
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = Some introduction TBC.
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    ButtonComponent intro_btn
      bold = True
      color = black
      disabled = True
      fillColor = white
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.45)
      size = [0.2,0.1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Next
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  Routine training
    TextComponent train_num
      disabled = True
      letterHeight = 0.02
      pos = (0.0, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = Training example 1 (this could be removed)
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    TextComponent train_txt1
      letterHeight = 0.03
      pos = (0.4, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
      text = Instruction texts.
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    ButtonComponent train_btn1
      bold = True
      color = black
      fillColor = white
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.5, -0.25)
      size = [0.24,0.1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Select
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    ButtonComponent train_btn2
      bold = True
      color = black
      fillColor = white
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.5, -0.4)
      size = [0.24,0.1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Select
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    ImageComponent separator
      image = materials/merge_sort/demo_imgs/white_BG.png
      pos = (0.0, -0.1)
      size = (1.5,0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent train_ex1
      image = materials/merge_sort/demo_imgs/white_BG.png
      pos = (-0.4, 0.2)
      size = (0.8, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    TextComponent answer_instruction
      letterHeight = 0.03
      pos = (-0.3, -0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = Select one from two partial answers
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    ImageComponent train_mc1
      image = materials/merge_sort/demo_imgs/white_BG.png
      pos = (-0.3,-0.25)
      size = (0.7,0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent train_mc2
      image = materials/merge_sort/demo_imgs/white_BG.png
      pos = (-0.3, -0.4)
      size = (0.7,0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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  Routine performance
    TextboxComponent response_2
      anchor = top-center
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.05
      pos = (-0.25, -0.25)
      size = (0.7,0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    TextComponent perf_txt
      letterHeight = 0.03
      pos = (0.4, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
      text = Revised instructions for user operation.
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    ButtonComponent perf_submit
      bold = True
      color = black
      fillColor = white
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.5, -0.3)
      size = [0.24,0.1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Submit
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    ImageComponent separator_2
      image = materials/merge_sort/demo_imgs/white_BG.png
      pos = (0.0, -0.1)
      size = (1.5,0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent perf_ex1
      image = materials/merge_sort/demo_imgs/white_BG.png
      pos = (-0.4, 0.2)
      size = (0.8, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    TextComponent answer_instruction_2
      letterHeight = 0.03
      pos = (-0.25, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = Enter the item order (lightest first) separated by ","
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Flow
  Routine training
  Routine performance
